PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine p1
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        from inputs import devices, get_key

        def list_keyboards():
            """List all input devices and filter for keyboards."""
            print("Available input devices (keyboards):")
            keyboards = [device for device in devices if "keyboard" in device.name.lower()]
            for idx, keyboard in enumerate(keyboards):
                print(f"{idx}: {keyboard.name} (path: {keyboard})")
            return keyboards

        list_keyboards()

        def listen_to_keyboard(kb):
            """Listen for key presses from a specific keyboard device."""
            print(f"Listening to keyboard: {keyboard.name} (path: {keyboard.fn})")
            try:
                    events = kb.read()  # Read events from the specific device
                    for event in events:
                        if event.ev_type == "Key" and event.state == 1:
                            print(f"Key pressed from {keyboard.name}: {event.code}")
            except KeyboardInterrupt:
                print("\nExiting...")
      Begin Experiment:
        import serial

        port = serial.Serial("/dev/ttyUSB0", baudrate=115200)
        trigger_0 = int(10)
        trigger_1 = int(11)

        win0 = visual.Window(size=(1920, 1080), screen=1, fullscr=True)
        win0.checkTiming=False
        win1 = visual.Window(size=(1920, 1080), screen=2, fullscr=True)
        win1.checkTiming=False

        active_txt_0 = visual.TextStim(win0, text='Close your eyes and press the "a" button at the same time.\n' +
        'Count to 10  in your head, and then open your eyes release the "a" button')
        active_txt_1 = visual.TextStim(win1, text='Close your eyes and press the "l" button at the same time.\n' +
        'Count to 10  in your head, and then open your eyes release the "l" button')
        wait_txt = visual.TextStim(win1, text='The other player is about to close his eyes')
        polygon_on = visual.Polygon(win0, pos = (0.8, 0.8), size = 1, edges=5, color="white")
        polygon_off = visual.Polygon(win0, pos = (0.8, 0.8), size = 1, edges=5, color="black")

        win0.flip()
        win1.flip()

        import random
        is_left = random.choice([False, True])
      Begin Routine:
        wait_txt.setText('The other player is about to close his eyes')

        if is_left:
            active_txt_0.setAutoDraw(True)
            wait_txt.win = win1
            polygon_on.win = win0
            polygon_off.win = win1
        else:
            active_txt_1.setAutoDraw(True)
            wait_txt.win = win0
            polygon_on.win = win1
            polygon_off.win = win0

        wait_txt.setAutoDraw(True)
        win0.flip()
        win1.flip()
        clicked = False
      Each Frame:
        if  not clicked and key_resp_2.keys in ['a', 'l']:
            if is_left:
                port.write(trigger_0.to_bytes(1, 'big'))
            else:
                port.write(trigger_1.to_bytes(1, 'big'))
            clicked = True
            polygon_on.setAutoDraw(True)
            polygon_off.setAutoDraw(True)
            wait_txt.setText('The other player closed his eyes')
            win0.flip()
            win1.flip()
      End Routine:
        active_txt_0.setAutoDraw(False)
        active_txt_1.setAutoDraw(False)

        wait_txt.setAutoDraw(False)

        polygon_on.setAutoDraw(False)
        polygon_off.setAutoDraw(False)

        win0.flip()
        win1.flip()

        is_left = not is_left
    KeyboardComponent key_resp
      allowedKeys = 'a', 'l'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'a', 'l'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine start
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    KeyboardComponent key_resp_3
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine p1
  LoopTerminator trials
